PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $label
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    KeyboardComponent key_resp
      allowedKeys = "n","m"
      forceEndRoutine = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $stimulus
      pos = (0, 0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if they responded correctly, incorrectly, or missed
        if not key_resp.keys:  # No response was made
            feedback_message = 'Miss'
        elif key_resp.keys == 'm' and is_match:  # Correct match response
            feedback_message = 'Correct'
        elif key_resp.keys == 'n' and not is_match:  # Correct not-match response
            feedback_message = 'Correct'
        else:  # Any other response is incorrect
            feedback_message = 'Incorrect'

        is_match = int(is_match)  # is_match is now treated as a variable from the Excel file
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'C:\\Users\\Admin\\Desktop\\bhaktiexperiment\\square.png', 'label': 'self', 'is_match': 1},
      {'stimulus': 'C:\\Users\\Admin\\Desktop\\bhaktiexperiment\\triangle.png', 'label': 'other', 'is_match': 1},
      {'stimulus': 'C:\\Users\\Admin\\Desktop\\bhaktiexperiment\\square.png', 'label': 'other', 'is_match': 0},
      {'stimulus': 'C:\\Users\\Admin\\Desktop\\bhaktiexperiment\\triangle.png', 'label': 'self', 'is_match': 0}]
    Routine trial
    Routine feedback
  LoopTerminator trials
